name: Growth Curve - Workflow

metadata:
  author: Casey Stone, Rafael Vescovi
  info: Initial PCR workflow for RPL workcell
  version: 0.1

modules:
  - name: hidex

flowdef:
  - name: run Hidex
    module: hidex
    action: run_assay
    args: 
      assay_name: "Campaign2_wei_cs"

  # - name: Move tip bin from Solo Position3 to Stack 4
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position3"
  #     target: "Stack4"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"

  # - name: Move tip bin from Stack 4 to Solo Position 3
  #   module: plateCrane
  #   action: transfer
  #   args:
  #     source: "Stack4"
  #     target: "Solo.Position3"
  #     source_type: "stack"
  #     target_type: "stack"
  #     plate_type: "tip_box_lid_off"

